PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'mriMode': u'scan', u'session': u'001', u'participant': u''}
  expName = uncertaintyExperiment
  Units = use prefs
  Screen = 1
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Routines
  Routine Thank_You_
    TextComponent thankYouText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine fixationCross
    TextComponent fixationCross1
      text = +
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine trial
    CodeComponent trialCode
      Begin Experiment:
        #from psychopy import logging
        #logging.console.setLevel(logging.DEBUG)

        import time
        import numpy as np
        import seaborn as sns

        # constants
        #
        leftButton = '1' # index finger
        rightButton = '2' # middle finger

        # log wall time
        #
        expInfo['expStartWallTime'] = time.ctime()




        # color palette
        palette = sns.color_palette("hls", 8)


        rewards = []
      Begin Routine:
        # log some times
        #
        trials.addData('trialStartWallTime', time.ctime())
        trials.addData('actualChoiceOnset', fmriClock.getTime())

        #trials.addData('mu1', mu1)
        #trials.addData('mu2', mu2)
        #trials.addData('sd1', sd1)
        #trials.addData('sd2', sd2)

        # ------------------ Feedback code -------------------
        #

        # clear the feedback
        #
        isFeedbackShown = False

        # ------------ Choice Highlight Code ----------------
        #

        # don't highlight the choices initially
        #
        leftHighlight.setOpacity(0)
        rightHighlight.setOpacity(0)

        # don't show the answers initially
        leftAnswerText.setOpacity(0)
        rightAnswerText.setOpacity(0)

        # hack to re-render the answer text with new opacity
        leftAnswerText.setText(str(int(round(leftAnswer))))
        rightAnswerText.setText(str(int(round(rightAnswer))))

        # track whether subject has responded so we can record response time
        # also initialize the response time by 3 (== timeout)
        # respTime is also used to terminate the relevant elements in the GUI
        # also used for feedback timing
        #
        respTime = choiceDuration # by default it's timeout

        # calculate the ITI, assuming trial will timeout.
        # we later change it to the actual ITI when the subject responds
        # note that we need to adjust for psychopy drift
        #
        timeLeftUntilItiOffset = itiOffset - fmriClock.getTime()
        actualItiDuration = timeLeftUntilItiOffset - (choiceDuration + isiDuration + feedbackDuration)
        print '   now = ', fmriClock.getTime()
        print '   itiOffset = ', itiOffset
        print '   expected iti duration = ', itiDuration
        print '   initial actual ITI duration = ', actualItiDuration
        itiDriftAdjustment = actualItiDuration - itiDuration
        print '           adjustment = ', itiDriftAdjustment
        if actualItiDuration < 0:
            actualItiDuration = 0 # worst case scenario... if we've drifted too far

        hasResponded = False
        lastReponseKey = None

        fixationITIcross.setColor('white')


        leftBox.fillColor = palette[leftColor]
        rightBox.fillColor = palette[rightColor]
        leftBox.draw()
        rightBox.draw()

        print blocks.nTotal
        assert blocks.nTotal == 4 # if number of blocks changes, initialize more colors in the palette in Begin Experiment

        reward = 0
      End Routine:
        # log some times
        #
        trials.addData('trialEndWallTime', time.ctime())
        trials.addData('actualItiOffset', fmriClock.getTime())

        trials.addData('reward', reward)
        rewards.append(reward)


        print 'Total number of rewards:', len(rewards)

        r = np.random.choice(rewards)
        print 'subject reward:', r
      Each Frame:
        # highlight subject's response
        #
        if responseKey.keys and not hasResponded:
            hasResponded = True

            respTime = responseKey.rt

            # see how much time we have left for the ITI

            timeLeftUntilItiOffset = itiOffset - fmriClock.getTime()
            actualItiDuration = timeLeftUntilItiOffset - (isiDuration + feedbackDuration)
            print '      final ITI = ', actualItiDuration
            itiDriftAdjustment = actualItiDuration - (choiceDuration - respTime) - itiDuration
            print '           adjustment = ', itiDriftAdjustment
            if actualItiDuration < 0:
                actualItiDuration = 0 # worst case scenario... if we've drifted too far

            # log some stuffs
            #
            trials.addData('actualChoiceOffset', fmriClock.getTime())
            trials.addData('actualIsiOnset', fmriClock.getTime())
            trials.addData('responseTime', respTime)
            trials.addData('actualItiDuration', actualItiDuration)
            trials.addData('itiDriftAdjustment', itiDriftAdjustment)




            # highlight choice
            #
            if responseKey.keys == '1': # left choice
                leftHighlight.opacity = 1
                reward = leftAnswer
        #        leftAnswerText.opacity = 1
            elif responseKey.keys == '2': # right choice
                rightHighlight.opacity = 1
                reward = rightAnswer
        #        rightAnswerText.opacity= 1
            else:
                assert False, 'Can only have one response, left or right choice'

            # save last response so we don't re-render
            # deprecated -- we only remember the last choice
            #
            lastReponseKey = responseKey.keys


            # hack to re-render the text with new opacity
            #
            leftHighlight.draw()
            rightHighlight.draw()
            leftAnswerText.setText(leftAnswerText.text)
            rightAnswerText.setText(rightAnswerText.text)


        # show user some feedback, and log the ISI / feedback times
        #
        # print 'wtf', t, (respTime + isiDuration), (t >= respTime + isiDuration), isiDuration, feedbackDuration

        if t >= respTime + isiDuration and not isFeedbackShown:
            isFeedbackShown = True
            print '      Feedback time: ', t

            # log some times
            #
            trials.addData('actualIsiOffset', fmriClock.getTime())
            trials.addData('actualFeedbackOnset', fmriClock.getTime())
            trials.addData('actualFeedbackOffset', fmriClock.getTime() + feedbackDuration)
            trials.addData('actualItiOnset', fmriClock.getTime() + feedbackDuration)


            if not responseKey.keys:
                # no response was made => timeout
                #
                fixationITIcross.setColor('red')
            else:
                if responseKey.keys == '1': # left choice
                    leftAnswerText.opacity = 1
                elif responseKey.keys == '2': # right choice

                    rightAnswerText.opacity= 1
                else:
                    assert False, 'Can only have one response, left or right choice'

                # hack to re-render the text with new opacity
                #
                leftHighlight.draw()
                rightHighlight.draw()
                leftAnswerText.setText(leftAnswerText.text)
                rightAnswerText.setText(rightAnswerText.text)
    CodeComponent streamingData
      Begin Experiment:
        # psychopy only writes the data at the very end
        # we want data with intermediate results
        # so we have this thing that dumps to a .wtf-file
        # as the experiment is going on
        #
        streamingFilename = thisExp.dataFileName + '.wtf'
        streamingFile = open(streamingFilename, 'a')
        streamingDelim = ','

        # get names of data columns
        #
        def getExpDataNames():
            names = thisExp._getAllParamNames()
            names.extend(thisExp.dataNames)
            # names from the extraInfo dictionary
            names.extend(thisExp._getExtraInfo()[0])
            return names

        # write a header lines
        #
        def writeHeadersToStreamingFile():
            for heading in getExpDataNames():
                streamingFile.write(u'%s%s' % (heading, streamingDelim))
            streamingFile.write('\n')
            streamingFile.flush()

        def flushEntryToStreamingFile(entry):
            for name in getExpDataNames():
                entry.keys()
                if name in entry.keys():
                    ename = unicode(entry[name])
                    if ',' in ename or '\n' in ename:
                        fmt = u'"%s"%s'
                    else:
                        fmt = u'%s%s'
                    streamingFile.write(fmt % (entry[name], streamingDelim))
                else:
                    streamingFile.write(streamingDelim)
            streamingFile.write('\n')
            streamingFile.flush()

        nextEntryToFlush = 0

        # write entries that we haven't flushed yet
        # this writes both to the .wtf file and to the mysql db
        #
        def flushEntries():
            global nextEntryToFlush

            # don't write anything during the initial run
            # that's b/c the number of columns can change
            #
            if runs.thisN == 0:
                return

            # if we're after the initial run, flush everything
            # that we haven't flushed yet
            #
            while nextEntryToFlush < len(thisExp.entries):
                flushEntryToStreamingFile(thisExp.entries[nextEntryToFlush])
                nextEntryToFlush += 1
      End Routine:
        flushEntries()
    PolygonComponent rightBox
      fillColor = $[0,1,0]
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [0.25, 0]
      startEstim = 0
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = [0.3, 0.5]
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    StaticComponent ISI
      stopVal [duration (s)] = $isiDuration
      durationEstim = 1
      startEstim = 2
      startVal [time (s)] = $respTime
    PolygonComponent leftBox
      fillColor = $[0,0,1]
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [-0.25, 0]
      startEstim = 0
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      size = [0.3, 0.5]
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    PolygonComponent leftHighlight
      fillColor = none
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [-0.25, 0]
      lineWidth = 10
      startEstim = 0
      lineColor = $[0,1,1]
      startVal [time (s)] = 0
      size = [0.3, 0.5]
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    PolygonComponent rightHighlight
      fillColor = none
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [0.25, 0]
      lineWidth = 10
      startEstim = 0
      lineColor = $[0,1,1]
      startVal [time (s)] = 0
      size = [0.3, 0.5]
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    TextComponent leftAnswerText
      color = black
      text = X
      stopVal [duration (s)] = 1
      durationEstim = 1
      pos = [-0.25, 0]
      startEstim = 3
      startVal [time (s)] = $respTime + isiDuration
      font = Arial Bold
      letterHeight = 0.15
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    TextComponent rightAnswerText
      color = black
      text = Y
      stopVal [duration (s)] = 1
      durationEstim = 1
      pos = [0.25, 0]
      startEstim = 3
      startVal [time (s)] = $respTime + isiDuration
      font = Arial Bold
      letterHeight = 0.15
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    KeyboardComponent responseKey
      storeCorrect = True
      stopVal [duration (s)] = $respTime
      durationEstim = 2
      forceEndRoutine = False
      startEstim = 0
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent L_condition
      text [set every repeat] = $condition[0]
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [-0.25, 0.32]
      startVal [time (s)] = 0
      letterHeight = .1
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    TextComponent R_condition
      text [set every repeat] = $condition[1]
      stopVal [duration (s)] = $respTime + isiDuration + feedbackDuration
      durationEstim = 4
      pos = [0.25, 0.32]
      startVal [time (s)] = 0.0
      letterHeight = .1
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    TextComponent fixationITIcross
      text = +
      stopVal [duration (s)] = $actualItiDuration
      durationEstim = 1
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration + feedbackDuration
      letterHeight = 0.15
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    StaticComponent ITI
      stopVal [duration (s)] = $actualItiDuration
      durationEstim = 1
      startEstim = 4
      startVal [time (s)] = $respTime + isiDuration + feedbackDuration
  Routine waitForTrigger
    CodeComponent waitForTriggerCode
      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner
        # definitely log it!

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan

            # settings for launchScan:
            MR_settings = {
                'TR': 2.5, # duration (sec) per volume
                'volumes': 141, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Begin Routine:
        #expInfo['mriMode'] = 'scan' #hack we're always in fMRI mode

        if expInfo['mriMode'] != 'off': # or 'scan' !
            assert expInfo['mriMode'] == 'scan'

            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock, # <-- how you know the time!
                      mode=expInfo['mriMode']) # <-- mode passed in
            elif trigger == 'parallel':
                parallel.setPortAddress(0x378)
                pin = 10; wait_msg = "Waiting for scanner..."
                pinStatus = parallel.readPin(pin)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
                       break
                       # start exp when pin values change
                globalClock.reset()
                logging.defaultClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received
        else:
            fmriClock.reset()

        expInfo['triggerWallTime'] = time.ctime()
        core.wait(1)
      End Routine:
        routineTimer.reset()
  Routine newRun
    TextComponent runInstr
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        We are about to begin a new round.

                Are you ready to begin?
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent runCode
      Begin Experiment:
        import os

        subjectFilename = os.path.join('csv', expInfo['participant'] + '.csv')
        print 'Loading from ', subjectFilename
      Begin Routine:
        #runInstr.setText("Beginning round #" + str(runs.thisN + 1))
  Routine newBlock
    TextComponent text
      text = New block is starting
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ibiFixationCross
    TextComponent ibifixationCross
      text = +
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine instructions
    TextComponent instrText
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press "1" for left box or "2" for right box
                     to make your choice.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent instruct_code
      Begin Experiment:
        win.setColor('black')

        leftPressInstr = "with your index finger"
        rightPressInstr = "with your middle finger"



        instruction ='''In this task, you have a choice between two slot machines, represented by colored buttons. ''' \
        + ''' When you click one of the buttons, you will win or lose points. ''' \
        + ''' Choosing the same slot machine will not always give you the same points, but one slot machine is always better than the other. ''' \
        + ''' Your goal is to choose the slot machine that will give you the most points.''' \
        + ''' After making your choice, you will receive feedback about the outcome.

        Sometimes the machines are "safe" (always delivering the same feedback), and sometimes the machines are "risky" (delivering variable feedback). '''\
        + ''' Before you make a choice, you will get information about each machine: "S" indicates SAFE, "R" indicates RISKY. '''\
        + ''' **Note that safe/risky is independent of how rewarding a machine is: a risky machine may deliver more points on average than a safe machine, and vice versa. '''\
        + ''' You cannot predict how good a machine is based on whether it is safe or risky.

        You will play 30 games, each with a different pair of slot machines.''' \
        + ''' Each game will consist of 10 trials.

        Press %s to choose the left machine.
        Press %s to choose the right machine.

        Now press space to begin the first game.''' % (leftPressInstr, rightPressInstr)
Flow
  Routine instructions
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = $subjectFilename
    loopType = sequential
    nReps = 1
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    Routine newRun
    Routine waitForTrigger
    Routine fixationCross
    LoopInitiator blocks loopType="TrialHandler"
      conditionsFile = $runFilename
      loopType = sequential
      nReps = 1
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      Routine newBlock
      Routine ibiFixationCross
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $blockFilename
        loopType = sequential
        nReps = 1
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        Routine trial
      LoopTerminator trials
    LoopTerminator blocks
    Routine fixationCross
  LoopTerminator runs
